<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Olfactometer.bonsai">
        <PortO0>COM10</PortO0>
        <EventsO0>EventsO0</EventsO0>
        <PortO1>COM13</PortO1>
        <EventsO1>EventsO1</EventsO1>
        <OlfactometerEvents>OlfactometerEvents</OlfactometerEvents>
        <SessionSettings>SessionSettings</SessionSettings>
        <OlfactometerCommand>OlfactometerCommand</OlfactometerCommand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:LoadSessionSettings">
          <p1:Path>hypnose-session.yml</p1:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:CreateDiscreteUniform">
          <p2:Lower>0</p2:Lower>
          <p2:Upper>1</p2:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>BinaryDiscrete</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Default</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>OlfactometerCommand</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OlfactometerEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Sequence</Selector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SampleBinary</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BinaryDiscrete</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>RewardCondition1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2.Sequence.RewardCondition1</Selector>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>RewardCondition2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2.Sequence.RewardCondition2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToArray" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CurrentTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SampleValence" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>TrialElements</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>PresentCommand</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Command</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OlfactometerCommand</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Sequence.PresentationTime</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.8S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>InterCommand</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Sequence.InterCommand</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OlfactometerCommand</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Sequence.InterCommandTime</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="8" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OlfactometerCommand</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="17" Label="Source2" />
      <Edge From="13" To="20" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="22" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>